PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Use version = 2022.2.5
  Window size (pixels) = [1440, 900]
  expName = rhythm_trial_exp
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent cross_white_2
      fillColor = 0.6, 0, 0.7
      lineColor = 0.6, 0, 0.7
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    PolygonComponent cross_colored
      fillColor = 0.6, 0.7, 0
      lineColor = 0.6, 0.7, 0
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 11
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    KeyboardComponent key_resp
      allowedKeys = 'b', 'n'
      correctAns = $ans
      forceEndRoutine = True
      startVal [time (s)] = 11
      storeCorrect = True
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    KeyboardComponent key_resp_moving
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = all keys
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    CodeComponent cross_manage
      Code Type = Py
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      Begin Routine:
        cross_white.setAutoDraw(True)
        win.flip()
      End Routine:
        core.wait(1)
        cross_white.setAutoDraw(False)
        win.flip()
    CodeComponent sound_stim
      Code Type = Py
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      Before Experiment:
        from pathlib import Path as _Path
        import sys as _sys

        _pkg_path = str(_Path(__file__).parent / 'pkgs')
        _sys.path.append(_pkg_path)

        from rhythm_trial_code.main import run_stim
      Begin Routine:
        sound_stim_started_time = core.getTime()
        play_trigger_meta()
        run_stim(port=port,delay=delay, scale=scale, stim_sound_file='./sound/SD0050.WAV', sound=msg!="REST")
        sound_stim_end_time = core.getTime()
        trials.addData('stim.start_time', sound_stim_started_time)
        trials.addData('stim.end_time', sound_stim_end_time)
        trials.addData('stim.delay', delay)
        trials.addData('stim.scale', scale)
        trials.addData('stim.ans', ans)
        trials.addData('stim.msg', msg)

        ans_msg = "不正解"
        if key_resp.corr == 1:
            ans_msg = "正解"
  Routine blank
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine instruction
    TextComponent text_norm
      font = Osaka
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        リズム実験（テスト）

        最初にMOVE, DON'T MOVE, RESTのうちいずれかが表示されます。
        MOVEのときは音に合わせ一定のテンポでスペースキーを押す
        DON'T MOVEのときは体を動かさない
        RESTのときは音はなりません。体を動かさない

        [1/2]
        スペースキーを押して次へ
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent text_align
      Code Type = Py
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      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
  Routine ending_message
    TextComponent text_norm_3
      font = Osaka
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        実験はこれで終了です。

        お疲れ様でした！
    KeyboardComponent key_instruct_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent text_align_3
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine break_section
    TextComponent text_norm_2
      font = Osaka
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        休憩


        スペースキーを押して再開
    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent text_align_2
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'center'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine fixation_cross
    PolygonComponent cross_white
      fillColor = 0.6, 0, 0.7
      lineColor = 0.6, 0, 0.7
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        play_trigger_meta()
  Routine trial_inst
    TextComponent text_norm_4
      font = Osaka
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $msg
      units = norm
      wrapWidth = 1.8
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    CodeComponent text_align_4
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        play_trigger_meta()
  Routine manage_serial
    CodeComponent code
      Code Type = Py
      Before Experiment:
        import sys
        import time
        import threading

        from rhythm_trial_code.message import play_trigger_factory
        from rhythm_trial_code.serial_trigger import init_port

        debug = False
        if len(sys.argv) > 1:
            if sys.argv[-1] == "DEBUG":
                debug = True

        port = init_port("COM03", dummy=debug)

        _play_trigger_meta = play_trigger_factory(port, [4])
        play_trigger_meta = lambda: _play_trigger_meta(True)
        # reset Port
        port.write([0x00])
      End Experiment:
        # Close the serial port
        port.write([0])
        port.close()
  Routine instruction2
    TextComponent text_norm_5
      font = Osaka
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        リズム実験（テスト）

        十字マークの色が変わったあとに、
        最後になった音について
        早まってると感じたら "B"
        遅れてると感じたら "N"
        を入力

        [2/2]
        スペースキーを押して開始
    KeyboardComponent key_instruct_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_5
      Code Type = Py
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      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm_5.alignText= 'left'
  Routine notify_corr
    TextComponent ans_text
      font = Osaka
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $ans_msg
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Flow
  Routine instruction
  Routine instruction2
  Routine manage_serial
  Routine blank
  LoopInitiator session loopType="TrialHandler"
    conditionsFile = exp_params/session.csv
    loopType = sequential
    nReps = 1
    random seed = 0
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    conditions:
      [OrderedDict([('trials_file_name', 'exp_params/0.csv')]),
      OrderedDict([('trials_file_name', 'exp_params/1.csv')])]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $trials_file_name
      loopType = sequential
      nReps = 1
      random seed = 0
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      conditions:
        [OrderedDict([('delay', 0.1764052345967664), ('scale', 0.1764052345967664), ('ans', 'n'), ('msg', None)]),
        OrderedDict([('delay', 0.040015720836722335), ('scale', 0.040015720836722335), ('ans', 'n'), ('msg', None)]),
        OrderedDict([('delay', 0.09787379841057392), ('scale', 0.09787379841057392), ('ans', 'n'), ('msg', '動いてください')]),
        OrderedDict([('delay', 0.2240893199201458), ('scale', 0.2240893199201458), ('ans', 'n'), ('msg', '動かないでください')]),
        OrderedDict([('delay', 0.18675579901499675), ('scale', 0.18675579901499675), ('ans', 'n'), ('msg', '動かないでください')]),
        OrderedDict([('delay', -0.0977277879876411), ('scale', -0.0977277879876411), ('ans', 'b'), ('msg', '動いてください')]),
        OrderedDict([('delay', 0.09500884175255894), ('scale', 0.09500884175255894), ('ans', 'n'), ('msg', '動いてください')]),
        OrderedDict([('delay', -0.015135720829769791), ('scale', -0.015135720829769791), ('ans', 'b'), ('msg', '動かないでください')]),
        OrderedDict([('delay', -0.010321885179355785), ('scale', -0.010321885179355785), ('ans', 'b'), ('msg', '動いてください')]),
        OrderedDict([('delay', 0.04105985019383723), ('scale', 0.04105985019383723), ('ans', 'n'), ('msg', '動かないでください')]),
        OrderedDict([('delay', 0.0144043571160878), ('scale', 0.0144043571160878), ('ans', 'n'), ('msg', None)]),
        OrderedDict([('delay', 0.1454273506962975), ('scale', 0.1454273506962975), ('ans', 'n'), ('msg', None)]),
        OrderedDict([('delay', 0.07610377251469935), ('scale', 0.07610377251469935), ('ans', 'n'), ('msg', '動いてください')])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
      Routine trial_inst
      Routine fixation_cross
      Routine trial
      Routine notify_corr
    LoopTerminator trials
    Routine break_section
    Routine blank
  LoopTerminator session
  Routine ending_message
